PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine load_variables
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import serial
        import time
        import tdt

        #syn.getParameterValue("Button1", "ButtonPress")
        #syn.setParameterValue("IntVal", "StimCode", 1)

        syn = tdt.SynapseAPI()

        EXPERIMENT = "Experiment6"

        syn.setCurrentExperiment(EXPERIMENT)

        syn.setModeStr('Preview')

        ser = serial.Serial('COM1', baudrate=9600, timeout=1)

        if ser.is_open:
            print("Serial port is open.")
        else:
            ser.open()
            print("Serial port was closed, now opened.")

        # psychopy components constants
        response_image_dimensions = [1.55, 0.65] # units -> exp setting
        ldr_polygon_dimension = [150, 200] # pixels
        ldr_polygon_location = [960, -540] # pixels
      Begin Experiment:
        # functions that are used throughout the experiments

        def categorize_response(resp):
            """
                this function takes in the response integer and gives back the string response code back.
            """
            if resp == 241:
                return "LEFT90"
            elif resp == 242:
                return "LEFT30"
            elif resp == 244:
                return "RIGHT30"
            elif resp == 248:
                return "RIGHT90"
            else:
                return "ERROR!"
      End Experiment:
        syn.setModeStr('Idle')
  Routine Instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the experiment.

        In this experiment, there sounds will be coming in from four possible locations. You have to identify, to the best of your ability, where the sounds are coming from.

        The four buttons in front of you comprise of the four possible locations the sound might come from.


        Press any buttons to see the four possible locations.
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      Each Frame:
        if ser.cd:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine image_instruction
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    ImageComponent location_image
      image = response.png
      size = response_image_dimensions
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine countdown
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $str(3-int(t))
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  Routine task
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    CodeComponent stimulus_presentation
      Code Type = Auto->JS
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      Begin Routine:
        stim_code = int(stimcode)
        syn.setParameterValue("IntVal", "StimCode", stim_code)
      Each Frame:
        if ser.cd:
            continueRoutine = False
        else:
            continueRoutine = True
    PolygonComponent polygon
      fillColor = white
      pos = (960, -540)
      shape = rectangle
      size = ldr_polygon_dimension
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.472
      units = pix
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    SoundComponent stimuli
      sound [set every repeat] = $path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.472
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  Routine task_fixation
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    PolygonComponent task_fixation_polygon
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine task_response
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    CodeComponent response_code
      Code Type = Auto->JS
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      Each Frame:
        response_status = ser.cd

        if response_status == True:
            continueRoutine = False
        else:
            continueRoutine = True
      End Routine:
        resp = syn.getParameterValue("Button1", "ButtonPress")

        if categorize_response(resp) == location_condition:
            thisExp.addData("accuracy", 1)
        else:
            thisExp.addData("accuracy", 0)

        thisExp.addData("response_integer", resp)
        thisExp.addData("response", categorize_response(resp))
    ImageComponent image_2
      image = response.png
      size = response_image_dimensions
      startVal [time (s)] = 0.0
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  Routine test_feedback
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $"correct" if categorize_response(resp) ==location_condition else "incorrect"
Flow
  Routine load_variables
  Routine Instructions
  Routine image_instruction
  Routine countdown
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path', 'Stimuli\\control_negative.40.700.30.left.wav'), ('file_type', 'control_negative'), ('SNR', 40), ('frequency', 700), ('angle', 30), ('channel', 'left'), ('location_condition', 'LEFT30'), ('stimcode', 1)]),
      OrderedDict([('path', 'Stimuli\\control_negative.40.700.30.right.wav'), ('file_type', 'control_negative'), ('SNR', 40), ('frequency', 700), ('angle', 30), ('channel', 'right'), ('location_condition', 'RIGHT30'), ('stimcode', 2)]),
      OrderedDict([('path', 'Stimuli\\control_negative.40.700.90.left.wav'), ('file_type', 'control_negative'), ('SNR', 40), ('frequency', 700), ('angle', 90), ('channel', 'left'), ('location_condition', 'LEFT90'), ('stimcode', 3)]),
      OrderedDict([('path', 'Stimuli\\control_negative.40.700.90.right.wav'), ('file_type', 'control_negative'), ('SNR', 40), ('frequency', 700), ('angle', 90), ('channel', 'right'), ('location_condition', 'RIGHT90'), ('stimcode', 4)]),
      OrderedDict([('path', 'Stimuli\\control_negative.6.700.30.left.wav'), ('file_type', 'control_negative'), ('SNR', 6), ('frequency', 700), ('angle', 30), ('channel', 'left'), ('location_condition', 'LEFT30'), ('stimcode', 5)]),
      OrderedDict([('path', 'Stimuli\\control_negative.6.700.30.right.wav'), ('file_type', 'control_negative'), ('SNR', 6), ('frequency', 700), ('angle', 30), ('channel', 'right'), ('location_condition', 'RIGHT30'), ('stimcode', 6)])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
    Routine task_fixation
    Routine task
    Routine task_response
    Routine test_feedback
  LoopTerminator trials
